---
API: 2.1
OpenSesame: 3.3.8
Platform: nt
---
set width 1280
set uniform_coordinates yes
set title "Mouse bragging"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set psychopy_waitblanking yes
set psychopy_suppress_warnings yes
set psychopy_monitor testMonitor
set mouse_backend psycho
set keyboard_backend psycho
set height 720
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 24
set font_italic no
set font_family sans
set font_bold no
set experiment_path "C:/Users/esben/Desktop/study/4th semester/percact/mousetracking"
set disable_garbage_collection yes
set description "Mouse tracking for clickbait titles"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set breaking_variable True
set bidi yes
set background white

define notepad about_this_template
	__note__
	This template already contains the basic structure of a typical experiment.
	It consists of a practice phase, followed by an experimental phase. For more
	information, please visit <http://osdoc.cogsci.nl/>
	Have fun with OpenSesame!
	__end__
	set description "Some pointers to help you gest started!"

define loop block_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 55
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if "[breaking_variable] = False"
	setcycle 0 question "Hvor godt virker Astra Zenica-vaccinen?"
	setcycle 0 left_bg white
	setcycle 0 left_bold no
	setcycle 0 left_family sans
	setcycle 0 left_font black
	setcycle 0 left_image "vaccine.png"
	setcycle 0 left_option "Resultater af Astra Zenica-test"
	setcycle 0 right_bg yellow
	setcycle 0 right_bold yes
	setcycle 0 right_family sans
	setcycle 0 right_font red
	setcycle 0 right_image "virus.png"
	setcycle 0 right_option "Resultater af Astra Zenica-test"
	setcycle 1 question "Hvornår skal du vaccineres?"
	setcycle 1 left_bg white
	setcycle 1 left_bold no
	setcycle 1 left_family sans
	setcycle 1 left_font black
	setcycle 1 left_image "vaccine.png"
	setcycle 1 left_option "SKANDALE: VACCINATIONER SAT PÅ PAUSE"
	setcycle 1 right_bg yellow
	setcycle 1 right_bold yes
	setcycle 1 right_family sans
	setcycle 1 right_font red
	setcycle 1 right_image "virus.png"
	setcycle 1 right_option "Sundhedsstyrelsen vaccinationsoverblik"
	setcycle 2 question "Hvor mange coronasmittede er der i København?"
	setcycle 2 left_bg white
	setcycle 2 left_bold no
	setcycle 2 left_family sans
	setcycle 2 left_font black
	setcycle 2 left_image "virus.png"
	setcycle 2 left_option "Antal COVID-ramte i København kommune."
	setcycle 2 right_bg yellow
	setcycle 2 right_bold yes
	setcycle 2 right_family sans
	setcycle 2 right_font red
	setcycle 2 right_image "vaccine.png"
	setcycle 2 right_option "Superspredere går amok i København."
	setcycle 3 question "Hvad er de nye restriktioner?"
	setcycle 3 left_bg white
	setcycle 3 left_bold no
	setcycle 3 left_family sans
	setcycle 3 left_font black
	setcycle 3 left_image "warning.png"
	setcycle 3 left_option "Forargelse over Mettes nye regler"
	setcycle 3 right_bg yellow
	setcycle 3 right_bold yes
	setcycle 3 right_family sans
	setcycle 3 right_font red
	setcycle 3 right_image "virus.png"
	setcycle 3 right_option "Nyt pressemøde om COVID19 situationen"
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	setcycle 5 question "Hvor er corona-smitten højest for tiden?"
	setcycle 5 left_bg white
	setcycle 5 left_bold no
	setcycle 5 left_family sans
	setcycle 5 left_font black
	setcycle 5 left_image "virus.png"
	setcycle 5 left_option "Dagens coronatal: Overblik"
	setcycle 5 right_bg yellow
	setcycle 5 right_bold yes
	setcycle 5 right_family sans
	setcycle 5 right_font red
	setcycle 5 right_image "warning.png"
	setcycle 5 right_option "Corona stikker af i Vollsmose "
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	setcycle 7 question "Hvilke befolkningsgrupper bør følge COVID-19 restriktionerne?"
	setcycle 7 left_bg white
	setcycle 7 left_bold no
	setcycle 7 left_family sans
	setcycle 7 left_font black
	setcycle 7 left_image "warning.png"
	setcycle 7 left_option "ÆLDRE I OVERHÆNGENDE FARE FOR CORONA DØD!"
	setcycle 7 right_bg yellow
	setcycle 7 right_bold yes
	setcycle 7 right_family sans
	setcycle 7 right_font red
	setcycle 7 right_image "vaccine.png"
	setcycle 7 right_option "Demografisk overblik over COVID-19 risikogrupper."
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	setcycle 12 question "Hvad er de mest almindelige symptomer af corona?"
	setcycle 12 left_bg yellow
	setcycle 12 left_bold yes
	setcycle 12 left_family sans
	setcycle 12 left_font red
	setcycle 12 left_image "vaccine.png"
	setcycle 12 left_option "Demografisk overblik: Antal smittede i på landsplan."
	setcycle 12 right_bg yellow
	setcycle 12 right_bold yes
	setcycle 12 right_family sans
	setcycle 12 right_font red
	setcycle 12 right_image "vaccine.png"
	setcycle 12 right_option "Du er måske smittet med corona!"
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	setcycle 14 question "Hvor godt virker Astra Zenica-vaccinen?"
	setcycle 14 left_bg yellow
	setcycle 14 left_bold yes
	setcycle 14 left_family sans
	setcycle 14 left_font red
	setcycle 14 left_image "vaccine.png"
	setcycle 14 left_option "Resultater af Astra Zenica-test"
	setcycle 14 right_bg white
	setcycle 14 right_bold no
	setcycle 14 right_family sans
	setcycle 14 right_font black
	setcycle 14 right_image "virus.png"
	setcycle 14 right_option "Resultater af Astra Zenica-test"
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	setcycle 16 question "Hvor mange coronasmittede er der i København?"
	setcycle 16 left_bg yellow
	setcycle 16 left_bold yes
	setcycle 16 left_family sans
	setcycle 16 left_font red
	setcycle 16 left_image "virus.png"
	setcycle 16 left_option "Antal COVID-ramte i København kommune."
	setcycle 16 right_bg white
	setcycle 16 right_bold no
	setcycle 16 right_family sans
	setcycle 16 right_font black
	setcycle 16 right_image "vaccine.png"
	setcycle 16 right_option "Superspredere går amok i København."
	setcycle 17 question "Hvad er de nye restriktioner?"
	setcycle 17 left_bg yellow
	setcycle 17 left_bold yes
	setcycle 17 left_family sans
	setcycle 17 left_font red
	setcycle 17 left_image "warning.png"
	setcycle 17 left_option "Forargelse over Mettes nye regler"
	setcycle 17 right_bg white
	setcycle 17 right_bold no
	setcycle 17 right_family sans
	setcycle 17 right_font black
	setcycle 17 right_image "virus.png"
	setcycle 17 right_option "Nyt pressemøde om COVID19 situationen"
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	setcycle 19 question "Hvor er corona-smitten højest for tiden?"
	setcycle 19 left_bg yellow
	setcycle 19 left_bold yes
	setcycle 19 left_family sans
	setcycle 19 left_font red
	setcycle 19 left_image "virus.png"
	setcycle 19 left_option "Dagens coronatal: Overblik"
	setcycle 19 right_bg white
	setcycle 19 right_bold no
	setcycle 19 right_family sans
	setcycle 19 right_font black
	setcycle 19 right_image "warning.png"
	setcycle 19 right_option "Corona stikker af i Vollsmose "
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	setcycle 21 question "Hvilke befolkningsgrupper bør følge COVID-19 restriktionerne?"
	setcycle 21 left_bg yellow
	setcycle 21 left_bold yes
	setcycle 21 left_family sans
	setcycle 21 left_font red
	setcycle 21 left_image "warning.png"
	setcycle 21 left_option "ÆLDRE I OVERHÆNGENDE FARE FOR CORONA DØD!"
	setcycle 21 right_bg white
	setcycle 21 right_bold no
	setcycle 21 right_family sans
	setcycle 21 right_font black
	setcycle 21 right_image "vaccine.png"
	setcycle 21 right_option "Demografisk overblik over COVID-19 risikogrupper."
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	run trial_sequence

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run reset_feedback always
	run breaking_input always
	run block_loop always

define inline_script breaking_input
	set description "Executes Python code"
	___run__
	if exp.response == 'esc':
	    breaking_variable = False
	__end__
	set _prepare ""

define sketchpad end_of_experiment
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text="Press any key to exit" x=0 y=0 z_index=0

define sketchpad end_of_practice
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the practice phase is finished"
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=18 html=yes show_if=always text="Press any key to continue" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run instructions always
	run experimental_loop always
	run end_of_experiment always

define loop experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run block_sequence

define feedback feedback
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text="Your average response time was [avg_rt]ms<br /><br />Your accuracy was [acc]%<br /><br />Press any key to continue" x=-64 y=0 z_index=0

define sketchpad fixation
	set start_response_interval no
	set duration 200
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sketchpad instructions
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text="We will ask you questions and present news articles for you to select.<br /><br />Press any key to begin!" x=0 y=0 z_index=0

define keyboard_response keyboard_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define mousetrap_response mouse_response
	__warning_message__
	draw textline text="Please start moving" x=0 y=0
	__end__
	set update_feedback yes
	set timeout 10000
	set start_coordinates "0;200"
	set skip_item no
	set sketchpad stimulus
	set save_trajectories yes
	set reset_mouse yes
	set number_of_buttons 2
	set mouse_buttons_allowed "left_button;right_button"
	set max_initiation_time 1000
	set logging_resolution 10
	set description "Tracks mouse movements"
	set click_required yes
	set check_initiation_time yes
	set button4 ""
	set button3 ""
	set button2 right_option
	set button1 left_option
	set boundaries "upper=no lower=no left=no right=no"

define loop practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run block_sequence

define sketchpad question
	set start_response_interval no
	set duration 2500
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=sans font_italic=no font_size=18 html=yes show_if=always text="[question]" x=0 y=0 z_index=0

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sketchpad stimulus
	set start_response_interval no
	set duration 0
	set description "Displays stimuli"
	draw rect color="[right_bg]" fill=1 h=320 name=right_option penwidth=1 show_if=always w=368 x=264.0 y=-352.0 z_index=5
	draw rect color="[left_bg]" fill=1 h=320 name=left_option penwidth=1 show_if=always w=368 x=-632.0 y=-352.0 z_index=4
	draw textline center=0 color="[left_font]" font_bold="[left_bold]" font_family="[left_family]" font_italic=no font_size=18 html=yes show_if=always text="[left_option]" x=-608.0 y=-96.0 z_index=0
	draw textline center=0 color="[right_font]" font_bold="[right_bold]" font_family=right_family font_italic=no font_size=18 html=yes show_if=always text="[right_option]" x=288.0 y=-96.0 z_index=0
	draw image center=1 file="[left_image]" scale=1 show_if=always x=-448 y=-224 z_index=0
	draw image center=1 file="[right_image]" scale=1 show_if=always x=448 y=-224 z_index=0

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run question "[breaking_variable] = True"
	run fixation "[breaking_variable] = True"
	run stimulus "[breaking_variable] = True"
	run mouse_response "[breaking_variable] = True"
	run logger "[breaking_variable] = True"

